PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = rhythm_trial_exp
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent cross_white_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent cross_colored
      fillColor = -0.0039, 1.0000, 0.6627
      lineColor = -0.0039, 1.0000, 0.6627
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 11
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    KeyboardComponent key_resp
      allowedKeys = 'b', 'n'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 11
      storeCorrect = True
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    KeyboardComponent key_resp_moving
      allowedKeys = 'v'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent cross_manage
      Code Type = Py
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      Begin Routine:
        cross_white.setAutoDraw(True)
        win.flip()
      End Routine:
        core.wait(1)
        cross_white.setAutoDraw(False)
        win.flip()
    CodeComponent sound_stim
      Code Type = Py
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      Before Experiment:
        import sys
        sys.path.append("./pkgs")

        from rhythm_trial_code.main import run_stim
      Begin Routine:
        run_stim(delay=delay, scale=scale, stim_sound_file='./sound/SD0050.WAV', sound=msg!="REST")
        trials.addData('stim.delay', delay)
        trials.addData('stim.scale', scale)
        trials.addData('stim.ans', ans)
        trials.addData('stim.msg', msg)
  Routine blank
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instruction
    TextComponent text_norm
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        リズム実験（テスト）

        クロスが表示されたあとにキーボードで回答
        Probe Toneが早ければb
        遅ければn

        Spaceで開始
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine ending_message
    TextComponent text_norm_3
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 実験はこれで終了です
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine break_section
    TextComponent text_norm_2
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        休憩

        Spaceで再開
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine fixation_cross
    PolygonComponent cross_white
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine trial_inst
    TextComponent text_norm_4
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine instruction
  Routine blank
  LoopInitiator session loopType="TrialHandler"
    conditionsFile = exp_params/session.csv
    loopType = random
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    conditions:
      [OrderedDict([('trials_file_name', 'exp_params/0.csv')]),
      OrderedDict([('trials_file_name', 'exp_params/1.csv')]),
      OrderedDict([('trials_file_name', 'exp_params/2.csv')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trials_file_name
      loopType = random
      random seed = 0
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      conditions:
        [OrderedDict([('delay', 0.1764052345967664), ('scale', 0.1764052345967664), ('ans', 'n'), ('msg', None)]),
        OrderedDict([('delay', 0.040015720836722335), ('scale', 0.040015720836722335), ('ans', 'n'), ('msg', None)]),
        OrderedDict([('delay', 0.09787379841057392), ('scale', 0.09787379841057392), ('ans', 'n'), ('msg', '動いてください')]),
        OrderedDict([('delay', 0.2240893199201458), ('scale', 0.2240893199201458), ('ans', 'n'), ('msg', '動かないでください')]),
        OrderedDict([('delay', 0.18675579901499675), ('scale', 0.18675579901499675), ('ans', 'n'), ('msg', '動かないでください')]),
        OrderedDict([('delay', -0.0977277879876411), ('scale', -0.0977277879876411), ('ans', 'b'), ('msg', '動いてください')]),
        OrderedDict([('delay', 0.09500884175255894), ('scale', 0.09500884175255894), ('ans', 'n'), ('msg', '動いてください')]),
        OrderedDict([('delay', -0.015135720829769791), ('scale', -0.015135720829769791), ('ans', 'b'), ('msg', '動かないでください')]),
        OrderedDict([('delay', -0.010321885179355785), ('scale', -0.010321885179355785), ('ans', 'b'), ('msg', '動いてください')]),
        OrderedDict([('delay', 0.04105985019383723), ('scale', 0.04105985019383723), ('ans', 'n'), ('msg', '動かないでください')]),
        OrderedDict([('delay', 0.0144043571160878), ('scale', 0.0144043571160878), ('ans', 'n'), ('msg', None)]),
        OrderedDict([('delay', 0.1454273506962975), ('scale', 0.1454273506962975), ('ans', 'n'), ('msg', None)]),
        OrderedDict([('delay', 0.07610377251469935), ('scale', 0.07610377251469935), ('ans', 'n'), ('msg', '動いてください')])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
      Routine trial_inst
      Routine fixation_cross
      Routine trial
    LoopTerminator trials
    Routine break_section
    Routine blank
  LoopTerminator session
  Routine ending_message
